PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = title
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Routines
  Routine trial
    PolygonComponent left_top
      fillColor = blue
      lineColor = black
      opacity [set every frame] = sin(1.57*t)
      pos = (-0.6, 0.25)
      shape = circle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20.0
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    PolygonComponent middle_top
      fillColor = yellow
      lineColor = black
      opacity [set every frame] = sin(0.2*t)
      pos = (0, 0.25)
      shape = circle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20.0
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    PolygonComponent right_top
      fillColor = purple
      lineColor = black
      opacity [set every frame] = sin(0.9*t)
      pos = (0.6, 0.25)
      shape = circle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20.0
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    PolygonComponent left_bottom
      fillColor = pink
      lineColor = black
      opacity [set every frame] = sin(.224*t)
      pos = (-0.6, -0.15)
      shape = circle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20.0
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    PolygonComponent middle_bottom
      fillColor = green
      lineColor = black
      opacity [set every frame] = sin(.63*t)
      pos = (0, -0.15)
      shape = circle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20.0
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    PolygonComponent right_bottom
      fillColor = red
      lineColor = black
      opacity [set every frame] = sin(.25*t)
      pos = (0.6, -0.15)
      shape = circle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20.0
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    TextComponent m
      color = black
      letterHeight = 0.02
      pos = (-0.6, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20.0
      text = M
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    TextComponent o
      color = black
      letterHeight = 0.02
      pos = (0.6, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20.0
      text = O
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    TextComponent p
      color = black
      letterHeight = 0.02
      pos = (-0.6, -0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20.0
      text = P
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    TextComponent q
      color = black
      letterHeight = 0.02
      pos = (0, -0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20.0
      text = Q
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    TextComponent r
      color = black
      letterHeight = 0.02
      pos = (0.6, -0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20.0
      text = R
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    TextboxComponent textbar
      bold = False
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.05
      pos = (0, 0.4)
      size = (0.8, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20.0
      text = answer
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    ButtonComponent submit
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      opacity [set every frame] = sin(.39*t)
      pos = (0.3, -0.35)
      size = [.3, .15]
      startVal [time (s)] = 0
      stopVal [duration (s)] = 20
      text = Submit
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    ButtonComponent back
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      opacity [set every frame] = sin(.285*t)
      pos = (-.3, -.35)
      size = [.3, .15]
      startVal [time (s)] = 0
      stopVal [duration (s)] = 20.0
      text = back
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    TextComponent n
      color = black
      letterHeight = 0.02
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      text = N
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Flow
  Routine trial
